CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:red
    Name the output image:red_ilum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:green
    Name the output image:green_ilum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:green
    Name the output image:CorrGREEN
    Select the illumination function:green_ilum
    Select how the illumination function is applied:Divide
    Select the input image:red
    Name the output image:CorrRED
    Select the illumination function:red_ilum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrGREEN
    Name the primary objects to be identified:VIP_01
    Typical diameter of objects, in pixel units (Min,Max):8,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrRED
    Name the primary objects to be identified:Tomato_01
    Typical diameter of objects, in pixel units (Min,Max):25,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:150
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:10|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
    Parent objects:Tomato_01
    Child objects:VIP_01
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:test_coloc_tomato_VIP
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/GitHub/Colocalisation
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test_coloc_TdTomVIP_
    Overwrite existing files without warning?:No
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